//// SET PARAMETERS ///////////////////////////////////////////////////////////////////

nStacks = 6 ; // Number of stacks total
stack0 = 0 ; // what is the index of the first stack? Usually zero.
fps = 5; // frames per second do you want the output movies to play at

// Make sure to have a trailing forward slash at the end!
outputDir = "E:/avistrok/bapGAL4_UAShidUASstingerHiRFP/20251113121832_bapGAL4UAShidUASStingerHiRFP_3mpf_22x/";
outputDir = "E:/dave/2026-05-18_170849/";

// Now run step3

////////////////////////////////////////////////////////////
////////// SECTION III /////////////////////////////////////
////////////////////////////////////////////////////////////
// Readjust LUTs for midsection movies

// Now resave and save as AVIs

for (stck = stack0; stck < nStacks+stack0; stck++) {

    // Get the name of the current image sequence
    baseName="Stack"+stck+"_left_composite_midZ.tif";
	selectImage(baseName);
    // Construct the filenames for the AVI and Tiff files
    aviPath = outputDir + "Stack"+stck+"_left_composite_midZ.avi";

    // Save the files in the designated directory with the constructed filenames
	saveAs("Tiff", outputDir + "Stack"+stck+"_left_composite_midZ.tif");
    run("AVI... ", "compression=JPEG frame="+fps+" save=" + aviPath);
    close();
    
    
    // Get the name of the current image sequence
    baseName="Stack"+stck+"_right_composite_midZ.tif";
	selectImage(baseName);
    // Construct the filenames for the AVI and Tiff files
    aviPath = outputDir + "Stack"+stck+"_right_composite_midZ.avi";

    // Save the files in the designated directory with the constructed filenames
	saveAs("Tiff", outputDir + "Stack"+stck+"_right_composite_midZ.tif");
    run("AVI... ", "compression=JPEG frame="+fps+" save=" + aviPath);
    close();
}


